begin model
begin parameters
    k_1 0.0
    r_2 0.0
    g0 4.0
    g1 18.0
    k 1.0
    ha 1E-5
    hr 1E-1
    fa 1E-5
    fr 1.0
end parameters
begin molecule types
    A()
    B()
    GeneA_00()
    GeneA_01()
    GeneA_10()
    GeneB_00()
    GeneB_01()
    GeneB_10()
end molecule types
begin species #initial molecule count
    GeneA_00() 1
    GeneA_01() 0
    GeneA_10() 0
    GeneB_00() 1
    GeneB_01() 0
    GeneB_10() 0
    A() 4
    B() 18
end species
begin observables
    Molecules Atot A()
    Molecules Btot B()
    Molecules GA00tot GeneA_00()
    Molecules GA01tot GeneA_01()
    Molecules GA10tot GeneA_10()
    Molecules GB00tot GeneB_00()
    Molecules GB01tot GeneB_01()
    Molecules GB10tot GeneB_10()
end observables
begin functions
    gfunc() = 0.5*Atot^2/(10+Atot^2)
end functions
begin reaction rules
    GeneA_00() + A() + A() <-> GeneA_10() ha, fa
    GeneA_00() + B() + B() <-> GeneA_01() hr, fr
    GeneA_00() -> GeneA_00() + A() g0
    GeneA_01() -> GeneA_01() + A() g0
    GeneA_10() -> GeneA_10() + A() g1
    GeneB_00() + A() + A() <-> GeneB_01() hr, fr
    GeneB_00() + B() + B() <-> GeneB_10() ha, fa
    GeneB_00() -> GeneB_00() + B() g0
    GeneB_01() -> GeneB_01() + B() g0
    GeneB_10() -> GeneB_10() + B() g1
    A() -> 0 k
    B() -> 0 k
end reaction rules
end model

#ACTIONS
simulate_ssa({t_start=>0,t_end=>1000000,n_steps=>1000,seed=>2});
simulate_ode({t_start=>0,t_end=>1000000,n_steps=>1000,atol=>1e-6,rtol=>1e-8});
simulate_pla({t_start=>0,t_end=>1000000,n_steps=>1000});
simulate_nf({t_start=>0,t_end=>1000000,stop_if=>"x"});
simulate({t_start=>0,t_end=>10,n_steps=>1,method=>"ssa"});
# simulate({t_start=>0,sample_times=>[0,1000000],output_step_interval=>1,max_sim_steps=>1,method=>"ssa"});
#visualize({type=>"contactmap"})
#visualize({type=>"ruleviz_pattern"})
#visualize({type=>"ruleviz_operation"})
parameter_scan({t_start=>0,t_end=>10,n_steps=>1,method=>"ssa",parameter=>"k_1",par_min=>0.0,par_max=>1.0,n_scan_pts=>2})
bifurcate({t_start=>0,t_end=>10,n_steps=>1,method=>"ssa",parameter=>"k_1",par_min=>0.0,par_max=>1.0,n_scan_pts=>2})
setModelName("model name")